### Topas parameter settings for conversion of Hounsfield Units to materials using the Schneider paper ###
s:Ge/Patient/CT/ImagingtoMaterialConverter = "Schneider"

### Correction Factor for the relative stopping power of Geant4 and the XiO planning system:
dv:Ge/Patient/CT/DensityCorrection = 4001 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 1.0 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1.0 g/cm3

### Formula : Density = (Offset + (Factor*(FactorOffset + HU[-1000,3000] ))) * DensityCorrection
#  SARRP_2018_60kV 
iv:Ge/Patient/CT/SchneiderHounsfieldUnitSections = 8 -1000 -200 -123 -7 139 200 3000 3001 
uv:Ge/Patient/CT/SchneiderDensityOffset          = 7 0.9986246 1.1730590 0.9945720 0.9968258 1.1000000 1.0430813 1.8968611 
uv:Ge/Patient/CT/SchneiderDensityFactor          = 7 0.0009992 0.0018714 0.0004203 0.0007423 0.0000000 0.0002846 0.0000000 
uv:Ge/Patient/CT/SchneiderDensityFactorOffset    = 7 0 0 0 0 0 0 0 

### Define Materials used for HU
sv:Ge/Patient/CT/SchneiderElements	= 13 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Magnesium" "Phosphorus" "Sulfur" "Chlorine" "Argon" "Calcium" "Sodium" "Potassium" "Titanium"
iv:Ge/Patient/CT/SchneiderHUToMaterialSections	= 26 -1000 -950 -153 -123 -93 5 109 149 200 300 400 500 600 700 800 900 1000 1100 1200 1300 1400 1500 1600 1700 2300 3001 
uv:Ge/Patient/CT/SchneiderMaterialsWeight1 	= 13 0.0	0.0	0.755	0.232	0.0	0.0	0.0	0.0	0.013	0.0	0.0	0.0	0.0	# Air
uv:Ge/Patient/CT/SchneiderMaterialsWeight2 	= 13 0.103	0.105	0.031	0.749	0.0	0.002	0.003	0.003	0.0	0.0	0.002	0.002	0.0	# Lung
uv:Ge/Patient/CT/SchneiderMaterialsWeight3 	= 13 0.116	0.681	0.002	0.198	0.0	0.0	0.001	0.001	0.0	0.0	0.001	0.0	0.0	# AT_AG1
uv:Ge/Patient/CT/SchneiderMaterialsWeight4 	= 13 0.115	0.578	0.008	0.296	0.0	0.0	0.001	0.001	0.0	0.0	0.001	0.0	0.0	# AT_AG2
uv:Ge/Patient/CT/SchneiderMaterialsWeight5 	= 13 0.115	0.48	0.014	0.39	0.0	0.001	0.0	0.0	0.0	0.0	0.0	0.0	0.0	# AT_AG3
uv:Ge/Patient/CT/SchneiderMaterialsWeight6 	= 13 0.102	0.134	0.03	0.722	0.0	0.002	0.002	0.002	0.002	0.0	0.002	0.002	0.0	# SoftTissus
uv:Ge/Patient/CT/SchneiderMaterialsWeight7 	= 13 0.07	0.207	0.062	0.622	0.0	0.022	0.009	0.003	0.0	0.0	0.005	0.0	0.0	# ConnectiveTissue
uv:Ge/Patient/CT/SchneiderMaterialsWeight8 	= 13 0.103	0.492	0.023	0.345	0.0	0.011	0.002	0.001	0.0	0.023	0.0	0.0	0.0	# Marrow_Bone01
uv:Ge/Patient/CT/SchneiderMaterialsWeight9 	= 13 0.104	0.487	0.023	0.346	0.0	0.012	0.002	0.001	0.0	0.025	0.0	0.0	0.0	# Marrow_Bone02
uv:Ge/Patient/CT/SchneiderMaterialsWeight10 	= 13 0.1	0.467	0.024	0.352	0.0	0.017	0.002	0.001	0.0	0.037	0.0	0.0	0.0	# Marrow_Bone03
uv:Ge/Patient/CT/SchneiderMaterialsWeight11 	= 13 0.095	0.448	0.025	0.357	0.0	0.023	0.002	0.001	0.0	0.049	0.0	0.0	0.0	# Marrow_Bone04
uv:Ge/Patient/CT/SchneiderMaterialsWeight12 	= 13 0.092	0.43	0.026	0.361	0.001	0.028	0.002	0.001	0.0	0.059	0.0	0.0	0.0	# Marrow_Bone05
uv:Ge/Patient/CT/SchneiderMaterialsWeight13 	= 13 0.088	0.413	0.027	0.366	0.001	0.032	0.002	0.001	0.0	0.07	0.0	0.0	0.0	# Marrow_Bone06
uv:Ge/Patient/CT/SchneiderMaterialsWeight14 	= 13 0.085	0.397	0.028	0.37	0.001	0.037	0.002	0.001	0.0	0.079	0.0	0.0	0.0	# Marrow_Bone07
uv:Ge/Patient/CT/SchneiderMaterialsWeight15 	= 13 0.081	0.382	0.029	0.374	0.001	0.041	0.002	0.001	0.0	0.089	0.0	0.0	0.0	# Marrow_Bone08
uv:Ge/Patient/CT/SchneiderMaterialsWeight16 	= 13 0.079	0.367	0.03	0.378	0.001	0.045	0.002	0.001	0.0	0.097	0.0	0.0	0.0	# Marrow_Bone09
uv:Ge/Patient/CT/SchneiderMaterialsWeight17 	= 13 0.075	0.353	0.031	0.382	0.001	0.049	0.002	0.001	0.0	0.106	0.0	0.0	0.0	# Marrow_Bone10
uv:Ge/Patient/CT/SchneiderMaterialsWeight18 	= 13 0.073	0.339	0.031	0.386	0.001	0.052	0.002	0.001	0.0	0.114	0.001	0.0	0.0	# Marrow_Bone11
uv:Ge/Patient/CT/SchneiderMaterialsWeight19 	= 13 0.069	0.327	0.032	0.389	0.001	0.056	0.002	0.001	0.0	0.122	0.001	0.0	0.0	# Marrow_Bone12
uv:Ge/Patient/CT/SchneiderMaterialsWeight20 	= 13 0.068	0.314	0.033	0.392	0.001	0.059	0.002	0.001	0.0	0.129	0.001	0.0	0.0	# Marrow_Bone13
uv:Ge/Patient/CT/SchneiderMaterialsWeight21 	= 13 0.064	0.302	0.034	0.396	0.001	0.063	0.002	0.001	0.0	0.136	0.001	0.0	0.0	# Marrow_Bone14
uv:Ge/Patient/CT/SchneiderMaterialsWeight22 	= 13 0.062	0.291	0.034	0.399	0.001	0.066	0.002	0.001	0.0	0.143	0.001	0.0	0.0	# Marrow_Bone15
uv:Ge/Patient/CT/SchneiderMaterialsWeight23 	= 13 0.059	0.275	0.035	0.403	0.001	0.07	0.003	0.0	0.0	0.153	0.001	0.0	0.0	# Marrow_Bone16
uv:Ge/Patient/CT/SchneiderMaterialsWeight24 	= 13 0.056	0.265	0.036	0.406	0.001	0.073	0.003	0.0	0.0	0.159	0.001	0.0	0.0	# Marrow_Bone17
uv:Ge/Patient/CT/SchneiderMaterialsWeight25 	= 13 0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	1.0	# MetallImplants
uv:Ge/Patient/CT/SchneiderMaterialsWeight26 	= 13 0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	0.0	1.0	# MetallImplants
