### TOPAS MC main file for beam : AD1N

### GENERAL COMMANDS
b:Ge/CheckForOverlaps 		= "1"
b:Ge/CheckForUnusedComponents 	= "0"
i:Ts/NumberOfThreads 		= 0
b:Ts/ShowCPUTime 		= "1"
i:Ts/MaxInterruptedHistories	= 100000

### WORLD VOLUME
d:Ge/World/HLX 			= 300 cm
d:Ge/World/HLY 			= 300 cm
d:Ge/World/HLZ 			= 300 cm

#### GEOMETRY
includeFile 			= Geometry/Nozzle.txt
includeFile 			= Geometry/Snout18.txt
includeFile 			= Patient.txt

b:Ge/RS/Include 		= "1"
d:Ge/RS/HL 			= 32.5 mm
d:Ge/RS/AntiHL 			= -1. * Ge/RS/HL mm
d:Ge/RS/AntiTransZ		= -1. * Ge/RS/TransZ cm

d:Ge/Snout/AlmostTransZ 	= -14.0 cm + Ge/RS/AntiTransZ
d:Ge/Snout/TransZ 		= Ge/Snout/AlmostTransZ + Ge/RS/AntiHL cm

d:Ge/SnoutGroup/Retraction 	= 7.5 cm
d:Ge/SnoutGroup/AntiRetraction 	= -1. * Ge/SnoutGroup/Retraction cm
d:Ge/SnoutGroup/TransZ		= 10 cm + Ge/SnoutGroup/AntiRetraction 
d:Ge/SnoutGroup/HalfTransZ	= 0.5 * Ge/SnoutGroup/TransZ cm

d:Ge/FM/HLZ	  		= 26.225 cm + Ge/SnoutGroup/HalfTransZ
d:Ge/FM/TransZ   		= -87.025 cm + Ge/SnoutGroup/HalfTransZ

### SuperGroup for Gantry rotation
s:Ge/SuperGroup/Parent 		= "World"
s:Ge/SuperGroup/Type 		= "Group"
d:Ge/SuperGroup/TransX 		= 0 m
d:Ge/SuperGroup/TransY 		= 0 m
d:Ge/SuperGroup/TransZ 		= 0 m
d:Ge/SuperGroup/RotX 		= 0 deg # Gantry angle
d:Ge/SuperGroup/RotY 		= 0 deg
d:Ge/SuperGroup/RotZ 		= 0 deg

### PHYSICS (TOPAS default settings)
s:Ph/ListName 			= "Default"
s:Ph/Default/Type 		= "Geant4_Modular"
sv:Ph/Default/Modules 		= 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"
d:Ph/Default/EMRangeMin 	= 100 eV
d:Ph/Default/EMRangeMax 	= 230 MeV
i:Ph/Default/EMBinsPerDecade 	= 100
d:Ph/Default/CutForAllParticles = 0.05 mm
d:Ge/SM1/Dipole/MaxStepSize 	= 1 mm
d:Ge/SM2/Dipole/MaxStepSize 	= 1 mm

sv:Ph/Default/LayeredMassGeometryWorlds = 5 "CT_visu" "Patient/CT" "Snout/BrassCone2" "Snout/BrassCone3" "RS"

### Time Features Parameters
i:Tf/NumberOfSequentialTimes 	= 1444
d:Tf/TimelineStart 		= 0 s
d:Tf/TimelineEnd 		= 1445 s
#####

### Spot Energy
s:Tf/Energy/Function 		= "Step"
dv:Tf/Energy/Times 		= 1444 1 2 3 4 5 6 7 8 9 10 11 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1444 s
dv:Tf/Energy/Values 		= 1444 167.94 167.94 167.94 167.94 167.94 167.94 167.94 167.94 167.94 167.94 167.94 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116.928 MeV
#####

##### Energy Spread
s:Tf/EnergySpread/Function 	= "Step"
dv:Tf/EnergySpread/Times 	= 1444 1 2 3 4 5 6 7 8 9 10 11 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1444 s
uv:Tf/EnergySpread/Values 	= 1444 0.530715418862 0.530715418862 0.530715418862 0.530715418862 0.530715418862 0.530715418862 0.530715418862 0.530715418862 0.530715418862 0.530715418862 0.530715418862 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0.62361298304 
#####

##### Spot Sigmas
s:Tf/SpotSize/Function 		= "Step"
dv:Tf/SpotSize/Times 		= 1444 1 2 3 4 5 6 7 8 9 10 11 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1444 s
dv:Tf/SpotSize/Values 		= 1444 6.32247099846 6.32247099846 6.32247099846 6.32247099846 6.32247099846 6.32247099846 6.32247099846 6.32247099846 6.32247099846 6.32247099846 6.32247099846 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8.25546721974 mm
#####

##### Spot Divergences
s:Tf/BeamDivergence/Function 	= "Step"
dv:Tf/BeamDivergence/Times 	= 1444 1 2 3 4 5 6 7 8 9 10 11 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1444 s
uv:Tf/BeamDivergence/Values 	= 1444 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 0.00169823795923 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0.00251348063652 
#####

##### Field for 1st first scanning magnet (in Y direction)
s:Tf/xField/Function 		= "Step"
dv:Tf/xField/Times 		= 1444 1 2 3 4 5 6 7 8 9 10 11 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1444 s
dv:Tf/xField/Values 		= 1444 -0.0297225985303 -0.0108625787824 0.00799744096544 0.0268574607133 0.045717482459 0.0645775042047 -0.0391526074053 -0.0202925876574 -0.00143256790956 0.0174274518383 0.0362874715862 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-0.0619601003547 tesla
d:Ge/SM2/Dipole/MagneticFieldStrength = Tf/xField/Value tesla
#####

##### Field for 2nd first scanning magnet (in X direction)
s:Tf/yField/Function 		= "Step"
dv:Tf/yField/Times 		= 1444 1 2 3 4 5 6 7 8 9 10 11 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1444 s
dv:Tf/yField/Values 		= 1444 -0.0368263753858 -0.0368263753858 -0.0368263753858 -0.0368263753858 -0.0368263753858 -0.0368263753858 -0.0211274072058 -0.0211274072058 -0.0211274072058 -0.0211274072058 -0.0211274072058 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-0.0882900350949 tesla
d:Ge/SM1/Dipole/MagneticFieldStrength = Tf/yField/Value tesla
#####

##### Number of Histories
s:Tf/Particles/Function 	= "Step"
dv:Tf/Particles/Times 		= 1444 1 2 3 4 5 6 7 8 9 10 11 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1444 s
iv:Tf/Particles/Values 		= 1444 280 116 175 182 200 245 225 156 265 291 198 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633 
#####

### SOURCE
s:So/Default/Type 		= "emittance"
s:So/Default/Component 		= "VW"
s:So/Default/BeamParticle 	= "proton"
d:So/Default/BeamEnergy 	= Tf/Energy/Value MeV
u:So/Default/BeamEnergySpread 	= Tf/EnergySpread/Value
s:So/Default/Distribution 	= "BiGaussian"
d:So/Default/SigmaX 		= Tf/SpotSize/Value mm
u:So/Default/SigmaXprime 	= Tf/BeamDivergence/Value
u:So/Default/CorrelationX 	= -0.882
d:So/Default/SigmaY 		= Tf/SpotSize/Value mm
u:So/Default/SigmaYprime 	= Tf/BeamDivergence/Value
u:So/Default/CorrelationY 	= -0.882
i:So/Default/NumberOfHistoriesInRun = Tf/Particles/Value

### GRAPHICS
b:Gr/Enable 			= "0"
s:Gr/ViewA/Type 		= "VRML"
b:Ge/World/Invisible 		= "1"
#b:Ge/Patient/CT/Invisible 	= "1"
#b:Gr/ViewA/IncludeAxes 	= "1"
