### TOPAS MC main file for patient ID #12420
### Beam name: Field_1

### GENERAL COMMANDS
b:Ge/CheckForOverlaps 		= "1"
b:Ge/CheckForUnusedComponents 	= "0"
i:Ts/NumberOfThreads 		= 0
b:Ts/ShowCPUTime 		= "1"
i:Ts/MaxInterruptedHistories	= 1000000000
i:Ts/ShowHistoryCountAtInterval = 0 # reduce size of slurm file

### WORLD VOLUME
d:Ge/World/HLX 			= 300 cm
d:Ge/World/HLY 			= 300 cm
d:Ge/World/HLZ 			= 300 cm

#### GEOMETRY
includeFile 			= Geometry/Nozzle.txt
includeFile 			= Geometry/Snout10.txt
b:Ge/RS/Include 		= "1"
d:Ge/RS/HL 			= 15.0 mm
d:Ge/RS/TransZ			= Ge/Snout/TransIso + Ge/RS/HL cm
d:Ge/Snout/TransZ 		= -14.1161758423 cm + Ge/Snout/AntiTransIso
d:Ge/SnoutGroup/TransZ		= 2.38382415771 cm
d:Ge/FM/HLZ	  		= 27.417 cm
d:Ge/FM/TransZ   		= -85.834 cm

### SuperGroup for Gantry rotation
s:Ge/SuperGroup/Parent 		= "World"
s:Ge/SuperGroup/Type 		= "Group"
d:Ge/SuperGroup/TransX 		= 0 m
d:Ge/SuperGroup/TransY 		= 0 m
d:Ge/SuperGroup/TransZ 		= 0 m
d:Ge/SuperGroup/RotX 		= 310 deg # Gantry angle
d:Ge/SuperGroup/RotY 		= 0 deg
d:Ge/SuperGroup/RotZ 		= 0 deg

### PATIENT
s:Ge/Patient/ImagingToMaterialConverter 	= "Schneider"
includeFile 					= HUtoMAT_Toshiba120kV.txt

### Patient group
s:Ge/Patient/Message 				= "Constructing Patient"
s:Ge/Patient/Type 				= "Group"
s:Ge/Patient/Parent 				= "World"
d:Ge/Patient/TransX 				= 44.7 mm
d:Ge/Patient/TransY 				= -15.1 mm
d:Ge/Patient/TransZ 				= -18.5 mm
d:Ge/Patient/RotX 				= 90 deg
d:Ge/Patient/RotY 				= 90.0 deg # 90 deg - table angle
d:Ge/Patient/RotZ 				= 180 deg

### Patient STL file (for visualization only)
#s:Ge/CT_visu/Type 				= "TsCAD"
#s:Ge/CT_visu/Parent 				= "Patient"
#b:Ge/CT_visu/IsParallel 			= "True"
#s:Ge/CT_visu/Material 				= "Vacuum"
#d:Ge/CT_visu/TransX 				= -160.0 mm
#d:Ge/CT_visu/TransY 				= -160.0 mm
#d:Ge/CT_visu/TransZ 				= -191.5 mm
#s:Ge/CT_visu/DrawingStyle 			= "Wireframe"
#s:Ge/CT_visu/InputFile 			= "Geometry/12420"
#s:Ge/CT_visu/FileFormat 			= "stl"
#d:Ge/CT_visu/Units 				= 1.0 mm

### Patient modelisation
s:Ge/Patient/CT/Parent 				= "Patient"
s:Ge/Patient/CT/Type 				= "TsDicomPatient"
b:Ge/Patient/CT/IsParallel 			= "True"
s:Ge/Patient/CT/Material 			= "G4_WATER"
s:Ge/Patient/CT/DicomDirectory 			= "./CT_12420" # cropped scan
sv:Ge/Patient/CT/DicomModalityTags 		= 1 "CT"
d:Ge/Patient/CT/TransX 				= 0 mm
d:Ge/Patient/CT/TransY 				= 0 mm
d:Ge/Patient/CT/TransZ 				= 0 mm
d:Ge/Patient/CT/RotX 				= 0 deg
d:Ge/Patient/CT/RotY 				= 0 deg
d:Ge/Patient/CT/RotZ 				= 0 deg

### Dose computation
s:Sc/PatientScorer/Component 			= "Patient/CT"
s:Sc/PatientScorer/Quantity 			= "DoseToWater"
s:Sc/PatientScorer/OutputFile 			= "./output/Dose_12420_Field_1"
s:Sc/PatientScorer/OutputType 			= "DICOM"
b:Sc/PatientScorer/OutputToConsole 		= "0"
s:Sc/PatientScorer/IfOutputFileAlreadyExists 	= "Increment"
i:Sc/PatientScorer/XBins 			= 640
i:Sc/PatientScorer/YBins 			= 640
i:Sc/PatientScorer/ZBins 			= 766

### PHYSICS (TOPAS default settings)
s:Ph/ListName 			= "Default"
s:Ph/Default/Type 		= "Geant4_Modular"
sv:Ph/Default/Modules 		= 7 "g4em-standard_opt3" "g4h-phy_QGSP_BIC_HP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping" "g4radioactivedecay"
d:Ph/Default/EMRangeMin 	= 100 eV
d:Ph/Default/EMRangeMax 	= 230 MeV
i:Ph/Default/EMBinsPerDecade 	= 100
d:Ph/Default/CutForAllParticles = 0.05 mm
d:Ge/SM1/Dipole/MaxStepSize 	= 1 mm
d:Ge/SM2/Dipole/MaxStepSize 	= 1 mm

sv:Ph/Default/LayeredMassGeometryWorlds = 5 "Patient/CT" "Snout/BrassCone2" "Snout/BrassTube2" "Snout/BrassCone3" "RS"

### Time Features Parameters
i:Tf/NumberOfSequentialTimes 	= 1368
d:Tf/TimelineStart 		= 0 s
d:Tf/TimelineEnd 		= 1369 s
#####

### Spot Energy
s:Tf/Energy/Function 		= "Step"
dv:Tf/Energy/Times 		= 1368 1 2 3 4 5 6 7 8 9 10 11 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1368 s
dv:Tf/Energy/Values 		= 1368 152.68 152.68 152.68 152.68 152.68 152.68 152.68 152.68 152.68 152.68 152.68 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100.19 MeV
#####

##### Energy Spread
s:Tf/EnergySpread/Function 	= "Step"
dv:Tf/EnergySpread/Times 	= 1368 1 2 3 4 5 6 7 8 9 10 11 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1368 s
uv:Tf/EnergySpread/Values 	= 1368 0.57 0.57 0.57 0.57 0.57 0.57 0.57 0.57 0.57 0.57 0.57 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0.65 
#####

##### Spot Sigmas
s:Tf/SpotSize/Function 		= "Step"
dv:Tf/SpotSize/Times 		= 1368 1 2 3 4 5 6 7 8 9 10 11 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1368 s
dv:Tf/SpotSize/Values 		= 1368 6.77 6.77 6.77 6.77 6.77 6.77 6.77 6.77 6.77 6.77 6.77 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9.25 mm
#####

##### Spot Divergences
s:Tf/BeamDivergence/Function 	= "Step"
dv:Tf/BeamDivergence/Times 	= 1368 1 2 3 4 5 6 7 8 9 10 11 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1368 s
uv:Tf/BeamDivergence/Values 	= 1368 0.0018 0.0018 0.0018 0.0018 0.0018 0.0018 0.0018 0.0018 0.0018 0.0018 0.0018 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0.0032 
#####

##### Field for SM1 scanning magnet
s:Tf/SM1Field/Function 			= "Step"
dv:Tf/SM1Field/Times 			= 1368 1 2 3 4 5 6 7 8 9 10 11 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1368 s
dv:Tf/SM1Field/Values 			= 1368 -0.0593 -0.0593 -0.0445 -0.0445 -0.0445 -0.0445 -0.0445 -0.0445 -0.0297 -0.0297 -0.0297 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0.0349 tesla
d:Ge/SM1/Dipole/MagneticFieldStrength 	= Tf/SM1Field/Value tesla
u:Ge/SM1/Dipole/MagneticFieldDirectionX	= 0.0
u:Ge/SM1/Dipole/MagneticFieldDirectionY	= 0.6428
u:Ge/SM1/Dipole/MagneticFieldDirectionZ	= 0.7660
#####

##### Field for SM2 scanning magnet
s:Tf/SM2Field/Function 			= "Step"
dv:Tf/SM2Field/Times 			= 1368 1 2 3 4 5 6 7 8 9 10 11 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1368 s
dv:Tf/SM2Field/Values 			= 1368 -0.0581 -0.0775 -0.1452 -0.1259 -0.1065 -0.0871 -0.0678 -0.0484 -0.0581 -0.0775 -0.0968 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0.1140 tesla
d:Ge/SM2/Dipole/MagneticFieldStrength 	= Tf/SM2Field/Value tesla
u:Ge/SM2/Dipole/MagneticFieldDirectionX	= 1.0
u:Ge/SM2/Dipole/MagneticFieldDirectionY	= 0.0
u:Ge/SM2/Dipole/MagneticFieldDirectionZ	= 0.0
#####

##### Number of Histories
s:Tf/Particles/Function 	= "Step"
dv:Tf/Particles/Times 		= 1368 1 2 3 4 5 6 7 8 9 10 11 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1368 s
iv:Tf/Particles/Values 		= 1368 475 475 475 237 237 475 1903 713 1427 1189 475 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359 
#####

### SOURCE
s:So/Default/Type 		= "emittance"
s:So/Default/Component 		= "VW"
s:So/Default/BeamParticle 	= "proton"
d:So/Default/BeamEnergy 	= Tf/Energy/Value MeV
u:So/Default/BeamEnergySpread 	= Tf/EnergySpread/Value
s:So/Default/Distribution 	= "BiGaussian"
d:So/Default/SigmaX 		= Tf/SpotSize/Value mm
u:So/Default/SigmaXprime 	= Tf/BeamDivergence/Value
u:So/Default/CorrelationX 	= -0.882
d:So/Default/SigmaY 		= Tf/SpotSize/Value mm
u:So/Default/SigmaYprime 	= Tf/BeamDivergence/Value
u:So/Default/CorrelationY 	= -0.882
i:So/Default/NumberOfHistoriesInRun = 1 * Tf/Particles/Value

### GRAPHICS
b:Gr/Enable 			= "0"
s:Gr/ViewA/Type 		= "VRML"
b:Ge/World/Invisible 		= "1"
#b:Ge/Patient/CT/Invisible 	= "1"
#b:Gr/ViewA/IncludeAxes 	= "1"
